WorkflowBuilder(Version=2.8.5)
ExternalizedMapping(TaskLogicPath, RigPath, SessionPath)
-> IncludeWorkflow(Path=AllenNeuralDynamics.Core:ReadSchemas.bonsai, TaskLogicPath="", RigPath="", SessionPath="")

GroupWorkflow LoadSchemas
    SubscribeSubject RawSessionSchema
    -> AindVideoEncodingBenchmarksSchemas.Session.DeserializeFromJson(Type=TypeMapping<AindVideoEncodingBenchmarksSchemas.Session.AindBehaviorSessionModel>)
    -> Take(Count=1)
    -> AsyncSubject SubjectSchema

    SubscribeSubject RawRigSchema
    -> AindVideoEncodingBenchmarksSchemas.Rig.DeserializeFromJson(Type=TypeMapping<AindVideoEncodingBenchmarksSchemas.Rig.AindVideoEncodingBenchmarksRig>)
    -> Take(Count=1)
    -> AsyncSubject RigSchema

    SubscribeSubject RawTaskLogicSchema
    -> AindVideoEncodingBenchmarksSchemas.TaskLogic.DeserializeFromJson(Type=TypeMapping<AindVideoEncodingBenchmarksSchemas.TaskLogic.AindVideoEncodingBenchmarksTaskLogic>)
    -> Take(Count=1)
    -> AsyncSubject TaskLogicSchema
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskLogicParameters

GroupWorkflow Init
    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> AsyncSubject Repository

    SubscribeSubject SubjectSchema
    -> PropertyMapping(Subject(Selector=Subject), RootFolder(Selector=RootPath), DateTimeOffset(Selector=Date))
    -> IncludeWorkflow
      Path=AllenNeuralDynamics.Core:GenerateRootLoggingPath.bonsai
      RootFolder=C:\data\
      Subject=672102
      DateTimeOffset=0001-01-01T00:00:00.0000000+00:00
      SubjectName=LoggingRootPath
    -> Take(Count=1)
    -> AsyncSubject CompoundRootPath

    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvent

GroupWorkflow Hardware
    GroupWorkflow HarpDevices
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpClockGenerator.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpTimestampGeneratorGen3Device.bonsai, PortName=COMx, StartExperimentSubjectName=StartExperiment)

        GroupWorkflow HarpBehavior
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpBehavior.PortName)
            -> PropertyMapping(PortName) => #2
            ExternalizedMapping(StartExperimentSubjectName) => #3
            #2, #3 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpBehaviorDevice.bonsai, PortName=COM5, StartExperimentSubjectName=StartExperiment)
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
            -> MemberSelector(Selector=Seconds)
            -> BehaviorSubject HarpTimestampSource
            -> WorkflowOutput

            SubscribeSubject HarpBehaviorEvents
            -> Take(Count=1)
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEventEnablePayload(EventEnable="PortDI PortDIO AnalogData Camera0 Camera1"))
            -> MulticastSubject HarpBehaviorCommands

    GroupWorkflow Cameras
        ReplaySubject<Harp.Behavior.CameraOutputs> ControllersInitialized(BufferSize=nil)

        GroupWorkflow CameraController0
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=TriggeredCameraController0)
            -> IncludeWorkflow(Path=Extensions\InstantitateTriggeredCameras.bonsai, Camera=CameraOutput0)
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> ReplaySubject TriggeredCamerasStream0(BufferSize=nil) => #4
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=TriggeredCameraController0)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #7
            #4, #7 -> SubscribeWhen
            -> WorkflowOutput

        GroupWorkflow CameraController1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=TriggeredCameraController1)
            -> IncludeWorkflow(Path=Extensions\InstantitateTriggeredCameras.bonsai, Camera=CameraOutput1)
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> ReplaySubject TriggeredCamerasStream1(BufferSize=nil) => #4
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=TriggeredCameraController1)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #7
            #4, #7 -> SubscribeWhen
            -> WorkflowOutput

        SubscribeSubject ControllersInitialized => #3
        PropertySource<Harp.Behavior.CreateStartCamerasPayload,Harp.Behavior.CameraOutputs>(MemberName=StartCameras, Value=None)
        -> Take(Count=1) => #5
        #3, #5 -> Scan
            WorkflowInput Source1
            -> MemberSelector(Selector="Accumulation,Value")
            -> BitwiseOr
            -> InputMapping(Selector=it, Value(Selector=it))
            -> PropertySource<Harp.Behavior.CreateStartCamerasPayload,Harp.Behavior.CameraOutputs>(MemberName=StartCameras, Value="CameraOutput0 CameraOutput1")
            -> WorkflowOutput
        -> Last
        -> AsyncSubject CameraControllersActive

        SubscribeSubject CameraControllersActive
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.StartCameras)
        -> MulticastSubject HarpBehaviorCommands => #11
        SubscribeSubject StartExperiment
        -> Delay(DueTime=PT1S) => #13
        #11, #13 -> SubscribeWhen

        SubscribeSubject CameraControllersActive
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.StopCameras)
        -> MulticastSubject HarpBehaviorCommands => #17
        SubscribeSubject EndExperiment
        -> Delay(DueTime=PT1S) => #19
        #17, #19 -> SubscribeWhen

GroupWorkflow QualityControl
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=TriggeredCameraController0)
    -> IncludeWorkflow(Path=Extensions\CameraQc.bonsai, StreamSubject=TriggeredCamerasStream0, ExposureGraceTime=0.0007, JitterThreshold=0.0005, SnoozeTime=PT10S) => #2
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=TriggeredCameraController0)
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #5
    #2, #5 -> SubscribeWhen

    SubscribeSubject RigSchema
    -> MemberSelector(Selector=TriggeredCameraController1)
    -> IncludeWorkflow(Path=Extensions\CameraQc.bonsai, StreamSubject=TriggeredCamerasStream1, ExposureGraceTime=0.0007, JitterThreshold=0.0005, SnoozeTime=PT10S) => #9
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=TriggeredCameraController1)
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #12
    #9, #12 -> SubscribeWhen

    SubscribeSubject Repository
    -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
    -> BitwiseNot => #16
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=AllowDirtyRepo) => #18
    #16, #18 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform AllowDirty?
      Expression: Item2 ? False : Item1
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.ThrowException(Message="Repository is not clean! Please discard all local changes.")

    SubscribeSubject ControllersInitialized
    -> Count => #24
    SubscribeSubject RigSchema
    -> Bonsai.Scripting.Expressions.ExpressionTransform ExpectedControllers => #26
      Expression: (it.TriggeredCameraController0==null ? 0 : 1)+(it.TriggeredCameraController1==null ? 0 : 1)
    #24, #26 -> Zip
    -> NotEqual
    -> Condition => #29
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject StartExperiment => #30
    #29, #30 -> SubscribeWhen
    -> AllenNeuralDynamics.Core.ThrowException

Defer Logging => #6
    Defer Behavior
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Modality)>(MemberName=Modality, Value=Behavior)
        -> Take(Count=1)
        -> Take(Count=1)
        -> AsyncSubject Modality

        GroupWorkflow HarpLogging
            SubscribeSubject HarpBehaviorEvents => #0
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #2
            #0, #2 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=Behavior, HarpDeviceName=Behavior)

            SubscribeSubject HarpClockGenEvents => #4
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #6
            #4, #6 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=ClockGenerator
              HarpDeviceName=TimestampGeneratorGen3

        GroupWorkflow HarpCommandsLogging
            SubscribeSubject HarpBehaviorEvents
            -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
            -> BehaviorSubject HarpSeconds

            SubscribeSubject HarpBehaviorCommands => #3
            SubscribeSubject HarpSeconds => #4
            #3, #4 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #6
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #8
            #6, #8 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=HarpCommands/Behavior
              HarpDeviceName=Behavior

            SubscribeSubject HarpClockGenCommands => #10
            SubscribeSubject HarpSeconds => #11
            #10, #11 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #13
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #15
            #13, #15 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=HarpCommands/ClockGenerator
              HarpDeviceName=TimestampGeneratorGen3

        GroupWorkflow SoftwareEvents
            SubscribeSubject SoftwareEvent
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #1
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #3
            #1, #3 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.TimestampSoftwareEvent => #6
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #8
            #6, #8 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=SoftwareEvents, SubjectName=LoggingRootPath, Modality=nil)
            -> WorkflowOutput

            GroupWorkflow Metadata
                SubscribeSubject Repository
                -> MemberSelector(Selector=Head)
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=RepositoryStatus)
                -> MulticastSubject SoftwareEvent

                SubscribeSubject Repository
                -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=IsRepositoryClean)
                -> MulticastSubject SoftwareEvent

    Defer BehaviorVideos
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Modality)>(MemberName=Modality, Value=BehaviorVideos)
        -> Take(Count=1)
        -> Take(Count=1)
        -> AsyncSubject Modality

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=TriggeredCameraController0)
        -> IncludeWorkflow(Path=Extensions\TriggeredCamerasLogger.bonsai, CameraStream=TriggeredCamerasStream0) => #7
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=TriggeredCameraController0)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #10
        #7, #10 -> SubscribeWhen

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=TriggeredCameraController1)
        -> IncludeWorkflow(Path=Extensions\TriggeredCamerasLogger.bonsai, CameraStream=TriggeredCamerasStream1) => #14
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=TriggeredCameraController1)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #17
        #14, #17 -> SubscribeWhen

    Defer Other
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Modality)>(MemberName=Modality, Value=nil)
        -> Take(Count=1)
        -> Take(Count=1)
        -> AsyncSubject Modality

        GroupWorkflow ConfigSchemaLogging
            SubscribeSubject SubjectSchema
            -> AindVideoEncodingBenchmarksSchemas.Session.SerializeToJson => #1
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #3
            #1, #3 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=session_output)

            SubscribeSubject TaskLogicSchema
            -> AindVideoEncodingBenchmarksSchemas.TaskLogic.SerializeToJson => #6
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #8
            #6, #8 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=tasklogic_output)

            SubscribeSubject RigSchema
            -> AindVideoEncodingBenchmarksSchemas.Rig.SerializeToJson => #11
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #13
            #11, #13 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=rig_output)

            SubscribeSubject RawRigSchema => #15
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #17
            #15, #17 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=rig_input, Extension=json)

            SubscribeSubject RawSessionSchema => #19
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #21
            #19, #21 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=session_input, Extension=json)

            SubscribeSubject RawTaskLogicSchema => #23
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #25
            #23, #25 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=tasklogic_input, Extension=json)

        GroupWorkflow Logs
            SubscribeSubject EndExperiment
            -> StringProperty(Value=ExperimentCompleted)
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=SoftwareEvent) => #2
            SubscribeSubject HarpTimestampSource => #3
            #2, #3 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.TimestampSoftwareEvent
            -> AllenNeuralDynamics.AindBehaviorServices.DataTypes.SerializeToJson => #7
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #9
            #7, #9 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName="", LogName=endsession)
SubscribeSubject EndExperiment
-> Delay(DueTime=PT2S) => #8
#6, #8 -> TakeUntil => #9
SubscribeSubject StartLogging => #10
#9, #10 -> SubscribeWhen

GroupWorkflow ExperimentControlUI
    BooleanProperty(Value=false)
    -> Take(Count=1)
    -> BehaviorSubject IsExperimentRunning

    SubscribeSubject IsExperimentRunning
    -> BitwiseNot
    -> PropertyMapping(Enabled)
    -> Bonsai.Gui.ButtonBuilder StartButton(Enabled=true, Visible=true, Text=Start!) => #6
    -> Take(Count=1)
    -> Unit
    -> PublishSubject StartLogging
    -> BooleanProperty(Value=true)
    -> MulticastSubject IsExperimentRunning
    #6 -> VisualizerMapping => #12
    SubscribeSubject IsExperimentRunning
    -> PropertyMapping(Enabled)
    -> Bonsai.Gui.ButtonBuilder EndButton(Enabled=true, Visible=true, Text="End Session") => #15
    -> VisualizerMapping => #16
    #12, #16 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput
    #15 -> Unit
    -> PublishSubject EndExperiment
    -> BooleanProperty(Value=false)
    -> MulticastSubject IsExperimentRunning

    SubscribeSubject StartLogging
    -> Delay(DueTime=PT1S)
    -> PublishSubject StartExperiment
-> VisualizerMapping => #13
GroupWorkflow Controller0Visualization
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=TriggeredCameraController0)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it != null ? (it.Cameras.Count > 0) : false
    -> AsyncSubject TriggeredCamerasController0Exists

    SubscribeSubject RigSchema => #4
    SubscribeSubject TriggeredCamerasController0Exists
    -> Condition => #6
        WorkflowInput Source1
        -> WorkflowOutput
    #4, #6 -> SubscribeWhen
    -> MemberSelector(Selector=TriggeredCameraController0.Cameras.Keys)
    -> Bonsai.Dsp.ConvertToArray(Depth=nil)
    -> Bonsai.Gui.ListBoxDataSourceBuilder(Enabled=true, Visible=true, DisplayMember="")
    -> BehaviorSubject SelectedController0Camera
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ListBoxDataSourceVisualizer>) => #12
    SubscribeSubject SelectedController0Camera
    -> CreateObservable GetStream
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject Camera

        SubscribeSubject TriggeredCamerasStream0 => #3
        SubscribeSubject Camera
        -> PropertyMapping(Value) => #5
        #3, #5 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=StringProperty)
            -> WorkflowOutput
        -> Merge
        -> WorkflowOutput
    -> Switch
    -> MemberSelector(Selector=Value.Image) => #16
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #17
    #16 -> Bonsai.Vision.ImageHistogram
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.ScalarHistogramVisualizer>) => #19
    SubscribeSubject TriggeredCamerasController0Exists
    -> PropertyMapping(Enabled, Visible) => #21
    #12, #17, #19, #21 -> Bonsai.Gui.TableLayoutPanelBuilder Controller0Visualization
      Enabled=true
      Visible=true
      ColumnCount=1
      RowCount=3
      ColumnStyles=""
      RowStyles(RowStyle(SizeType=Percent, Height=0.1), RowStyle(SizeType=Percent, Height=0.6), RowStyle(SizeType=Percent, Height=0.3))
      CellSpans=""
    -> WorkflowOutput
-> VisualizerMapping => #15
GroupWorkflow Controller1Visualization
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=TriggeredCameraController1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it != null ? (it.Cameras.Count > 0) : false
    -> AsyncSubject TriggeredCamerasController1Exists

    SubscribeSubject RigSchema => #4
    SubscribeSubject TriggeredCamerasController1Exists
    -> Condition => #6
        WorkflowInput Source1
        -> WorkflowOutput
    #4, #6 -> SubscribeWhen
    -> MemberSelector(Selector=TriggeredCameraController1.Cameras.Keys)
    -> Bonsai.Dsp.ConvertToArray(Depth=nil)
    -> Bonsai.Gui.ListBoxDataSourceBuilder(Enabled=true, Visible=true, DisplayMember="")
    -> BehaviorSubject SelectedController1Camera
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ListBoxDataSourceVisualizer>) => #12
    SubscribeSubject SelectedController1Camera
    -> CreateObservable GetStream
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject Camera

        SubscribeSubject TriggeredCamerasStream1 => #3
        SubscribeSubject Camera
        -> PropertyMapping(Value) => #5
        #3, #5 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=StringProperty)
            -> WorkflowOutput
        -> Merge
        -> WorkflowOutput
    -> Switch
    -> MemberSelector(Selector=Value.Image) => #16
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #17
    #16 -> Bonsai.Vision.ImageHistogram
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.ScalarHistogramVisualizer>) => #19
    SubscribeSubject TriggeredCamerasController1Exists
    -> PropertyMapping(Enabled, Visible) => #21
    #12, #17, #19, #21 -> Bonsai.Gui.TableLayoutPanelBuilder Controller1Visualization
      Enabled=true
      Visible=true
      ColumnCount=1
      RowCount=3
      ColumnStyles=""
      RowStyles(RowStyle(SizeType=Percent, Height=0.1), RowStyle(SizeType=Percent, Height=0.6), RowStyle(SizeType=Percent, Height=0.3))
      CellSpans=""
    -> WorkflowOutput
-> VisualizerMapping => #17
#13, #15, #17 -> Bonsai.Gui.TabControlBuilder UserInterface(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 16pt")

SubscribeSubject EndExperiment
-> Take(Count=1)
-> Delay(DueTime=PT2S)
-> SelectMany EndRoutine
    SubscribeSubject LoggingRootPath
    -> PropertyMapping(Source) => #1
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=RemotePath)
    -> Condition NotNull
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform NullOrEmpty
          Expression: String.IsNullOrEmpty(it)
        -> BitwiseNot
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.StripDirectoryPath => #5
    SubscribeSubject CompoundRootPath
    -> MemberSelector(Selector=SessionPath) => #7
    #5, #7 -> Zip
    -> Format(Format={0}/{1}, Selector="Item1, Item2")
    -> PropertyMapping(Destination) => #10
    #1, #10 -> AllenNeuralDynamics.Core.StartRobocopy(CreateLog=true, Arguments="/E /DCOPY:DAT /R:100 /W:3 /tee", ProcessWindowStyle=Normal) => #11
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=RemotePath)
    -> Condition NotNull => #14
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform NullOrEmpty
          Expression: String.IsNullOrEmpty(it)
        -> BitwiseNot
        -> WorkflowOutput
    SubscribeSubject StartExperiment => #15
    #14, #15 -> Zip => #16
    #11, #16 -> SubscribeWhen
-> WorkflowOutput
